<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>C:\Users\taunsquared\Dropbox\CuttleShuttle\CuttleShuttle-ManuallyAligned\CroppedAligned\MantleZoom\TentacleShots</io:Path>
          <io:SearchPattern>*.avi</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FileCapture">
                <cv:FileName>C:\Users\taunsquared\Dropbox\CuttleShuttle\CuttleShuttle-ManuallyAligned\CroppedAligned\MantleZoom\TentacleShots\CA_L7-H2013-02_2014-10-23_TS05_miss_60fps.avi</cv:FileName>
                <cv:PlaybackRate>0</cv:PlaybackRate>
                <cv:StartPosition>0</cv:StartPosition>
                <cv:PositionUnits>Frames</cv:PositionUnits>
                <cv:Loop>false</cv:Loop>
                <cv:Playing>true</cv:Playing>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="scr:PythonTransform">
              <scr:Script>@returns(str)
def process(value):
  global output
  L = len(value)-4
  output = value[0:L] + "_converted.avi"
  return output</scr:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\taunsquared\Dropbox\CuttleShuttle\CuttleShuttle-ManuallyAligned\CroppedAligned\MantleZoom\TentacleShots\CA_L7-H2013-02_2014-10-23_TS05_miss_60fps_converted.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>60</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ReplaySubject">
              <Name>FileName</Name>
              <BufferSize xsi:nil="true" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>